PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', '性别[男1女2]': '', '年龄': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = Double_Doors
  keyboardBackend = ioHub
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Routines
  Routine introduce1
    ImageComponent intro_image1
      image = images\introduce1.png
      size = (1.5, 0.556)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent intro_key_resp1
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine introduce2
    ImageComponent intro_image2
      image = images\introduce2.png
      size = (1.5, 0.556)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent intro_key_resp2
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introduce3
    ImageComponent intro_image3
      image = images\introduce3.png
      size = (1.5, 0.556)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent intro_key_resp3
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introduce4
    ImageComponent intro_image4
      image = images\introduce4.png
      size = (1.5, 0.556)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent intro_key_resp4
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine resting
    ImageComponent rest_image
      image = images\resting.png
      size = (1.5, 0.332)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      units = height
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  Routine ending
    ImageComponent end_image
      image = images\ending.png
      size = (1.5, 0.542)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      units = height
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  Routine waiting1
    CodeComponent waiting_code1
      Code Type = Auto->JS
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      Begin Experiment:
        #LOOP1
        waiting_image1 = ''
      Begin Routine:
        if selet_key_resp.keys != None:
            if selet_key_resp.keys == '1'or selet_key_resp.keys == '2':
                waiting_image1 = waiting_path_L
            elif selet_key_resp.keys == '3'or selet_key_resp.keys == '4':
                waiting_image1 = waiting_path_R
        else:
            waiting_image1 = waiting_path_non
    ImageComponent waiting_image_1
      image [set every repeat] = $waiting_image1
      size = (1.5, 0.653)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = height
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  Routine feedback1
    CodeComponent fadebact_code1
      Code Type = Auto->JS
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      Begin Experiment:
        #LOOP1
        feedback_image1 = ''
        Money_text1 = 100
      Begin Routine:
        if selet_key_resp.keys != None:
            if selet_key_resp.keys == '1'or selet_key_resp.keys == '2':
                Money_text1 += MONEY
                feedback_image1 = feedback_path_L
            elif selet_key_resp.keys == '3'or selet_key_resp.keys == '4':
                Money_text1 += MONEY
                feedback_image1 = feedback_path_R
        else:
            Money_text1 += 0
            feedback_image1 = feedback_path_non
      End Routine:
        Money_text2 = Money_text1
    ImageComponent feedback_image_1
      image [set every repeat] = $feedback_image1
      size = (1.5, 0.653)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    TextComponent Money_text_1
      color = red
      letterHeight = 0.05
      pos = (0.13, -0.095)
      startVal [time (s)] = 0.
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Money_text1
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  Routine select
    ImageComponent two_doors
      image = images\two_door.png
      size = (1.5, 0.653)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    KeyboardComponent selet_key_resp
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine waiting2
    CodeComponent waiting_code2
      Code Type = Auto->JS
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      Begin Experiment:
        #LOOP2
        waiting_image2 = ''
      Begin Routine:
        if selet_key_resp.keys != None:
            if selet_key_resp.keys == '1'or selet_key_resp.keys == '2':
                waiting_image2 = waiting_path_L
            elif selet_key_resp.keys == '3'or selet_key_resp.keys == '4':
                waiting_image2 = waiting_path_R
        else:
            waiting_image2 = waiting_path_non
    ImageComponent waiting_image_2
      image [set every repeat] = $waiting_image2
      size = (1.5, 0.653)
      startVal [time (s)] = 0.
      stopVal [duration (s)] = 2
      units = height
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  Routine feedback2
    CodeComponent feedback_code2
      Code Type = Auto->JS
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      Begin Experiment:
        #LOOP2
        feedback_image2 = ''
      Begin Routine:
        if selet_key_resp.keys == None:
            Money_text_2.setVisible = False
        else:
            Money_text_2.setVisible = True

        if selet_key_resp.keys != None:
            if selet_key_resp.keys == '1'or selet_key_resp.keys == '2':
                Money_text2 += MONEY
                feedback_image2 = feedback_path_L
            elif selet_key_resp.keys == '3'or selet_key_resp.keys == '4':
                Money_text2 += MONEY
                feedback_image2 = feedback_path_R
        else:
            Money_text2 += 0
            feedback_image2 = feedback_path_non
    ImageComponent feedback_image_2
      image [set every repeat] = $feedback_image2
      size = (1.5, 0.653)
      startVal [time (s)] = 0.
      stopVal [duration (s)] = 2
      units = height
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    TextComponent Money_text_2
      color = red
      letterHeight = 0.05
      pos = (0.13, -0.095)
      startVal [time (s)] = 0.
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Money_text2
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  Routine Trigger
    TextComponent trigger
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = "等待医师开始扫描"
      units = height
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    KeyboardComponent trigger_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine NULL
    TextComponent NULLtext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine Fixation
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = height
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Flow
  Routine introduce1
  Routine introduce2
  Routine introduce3
  Routine introduce4
  Routine Trigger
  Routine NULL
  LoopInitiator LOOP_1 loopType="TrialHandler"
    conditionsFile = documents\loop1.xlsx
    loopType = sequential
    nReps = 1
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    Routine Fixation
    Routine select
    Routine waiting1
    Routine feedback1
  LoopTerminator LOOP_1
  Routine resting
  LoopInitiator LOOP_2 loopType="TrialHandler"
    conditionsFile = documents\loop2.xlsx
    loopType = sequential
    nReps = 1
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    Routine Fixation
    Routine select
    Routine waiting2
    Routine feedback2
  LoopTerminator LOOP_2
  Routine ending
